PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = lsltest
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent wait_to_click
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
      text = Wait to click the space key
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent lsl_push
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(x=[trials.thisN])
    TextComponent fake_countdown
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 1
      text = Click Now
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  Routine setup
    CodeComponent lsl_setup
      Code Type = Py
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      Begin Routine:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='psychopy_markers', type='Markers', channel_count=1,
                          channel_format='int32', source_id='uniqueid12345')
        # Initialize the stream.
        outlet = StreamOutlet(info)
  Routine outro
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This is the end of the test. (3s)
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  Routine setupconfirm
    TextComponent start_labrecorder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Start LabRecorder...
        Click "a" when ready
    KeyboardComponent key_resp_2
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Take a break (2s)!
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[200])
Flow
  Routine setup
  Routine setupconfirm
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
  Routine rest
  Routine outro
